PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = Int&Aut+MDMQ
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Routines
  Routine Neut_Int_Task
    ImageComponent Neut_Int_Face_Stimuli
      image [set every repeat] = $Stimulus
      saveStartStop = False
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Neut_Int_Distractor
      durationEstim = 10
      image [set every repeat] = $Dots
      saveStartStop = False
      size = (1, 0.75)
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    KeyboardComponent Odd_Even
      allowedKeys = 'left','right'
      correctAns = $
      durationEstim = 10
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    ImageComponent Scale
      image = int_scale.jpg
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.2, 0.4)
      startEstim = 13
      startVal [condition] = $Neut_Int_Distractor.status==FINISHED
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    KeyboardComponent Neut_Int_Scale_Resp
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 13
      startVal [condition] = $Neut_Int_Distractor.status==FINISHED
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  Routine Neut_Aut_Task
    ImageComponent Neut_Aut_Face_Stimuli
      image [set every repeat] = $Face_Stimulus
      saveStartStop = False
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Neut_Aut_Distractor
      durationEstim = 10
      image [set every repeat] = $Dots_image
      saveStartStop = False
      size = (1, 0.75)
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    KeyboardComponent Odd_Even_2
      allowedKeys = 'left','right'
      correctAns = $
      durationEstim = 10
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    ImageComponent Neut_Aut_Set
      image [set every repeat] = $Face_Set
      saveStartStop = False
      size = (1.5, 0.8)
      startEstim = 13
      startVal [condition] = $Neut_Aut_Distractor.status==FINISHED
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    KeyboardComponent Neut_Aut_Set_Resp
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 13
      startVal [condition] = $Neut_Aut_Distractor.status==FINISHED
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  Routine Pos_Int_Task
    ImageComponent Pos_Int_Face_Stimuli
      image [set every repeat] = $Stimulus
      saveStartStop = False
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Pos_Int_Distractor
      durationEstim = 10
      image [set every repeat] = $Dots
      saveStartStop = False
      size = (1, 0.75)
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    KeyboardComponent Odd_Even_3
      allowedKeys = 'left','right'
      correctAns = $
      durationEstim = 10
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    ImageComponent Scale_2
      image = int_scale.jpg
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.2, 0.4)
      startEstim = 13
      startVal [condition] = $Pos_Int_Distractor.status==FINISHED
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    KeyboardComponent Pos_Int_Scale_Resp
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 13
      startVal [condition] = $Pos_Int_Distractor.status==FINISHED
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  Routine Pos_Aut_Task
    ImageComponent Pos_Aut_Face_Stimuli
      image [set every repeat] = $Face_Stimulus
      saveStartStop = False
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Pos_Aut_Distractor
      durationEstim = 10
      image [set every repeat] = $Dots_image
      saveStartStop = False
      size = (1, 0.75)
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    KeyboardComponent Odd_Even_4
      allowedKeys = 'left','right'
      correctAns = $
      durationEstim = 10
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    ImageComponent Pos_Aut_Set
      image [set every repeat] = $Face_Set
      saveStartStop = False
      size = (1.5, 0.8)
      startEstim = 13
      startVal [condition] = $Pos_Aut_Distractor.status==FINISHED
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    KeyboardComponent Pos_Aut_Set_Resp
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 13
      startVal [condition] = $Pos_Aut_Distractor.status==FINISHED
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  Routine Neg_Int_Task
    ImageComponent Neg_Int_Face_Stimuli
      image [set every repeat] = $Stimulus
      saveStartStop = False
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Neg_Int_Distractor
      durationEstim = 10
      image [set every repeat] = $Dots
      saveStartStop = False
      size = (1, 0.75)
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    KeyboardComponent Odd_Even_5
      allowedKeys = 'left','right'
      correctAns = $
      durationEstim = 10
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    ImageComponent Scale_3
      image = int_scale.jpg
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.2, 0.4)
      startEstim = 13
      startVal [condition] = $Neg_Int_Distractor.status==FINISHED
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    KeyboardComponent Neg_Int_Scale_Resp
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 13
      startVal [condition] = $Neg_Int_Distractor.status==FINISHED
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  Routine Neg_Aut_Task
    ImageComponent Neg_Aut_Face_Stimuli
      image [set every repeat] = $Face_Stimulus
      saveStartStop = False
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Neg_Aut_Distractor
      durationEstim = 10
      image [set every repeat] = $Dots_image
      saveStartStop = False
      size = (1, 0.75)
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    KeyboardComponent Odd_Even_6
      allowedKeys = 'left','right'
      correctAns = $
      durationEstim = 10
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [condition] = $event.getKeys(keyList=['left','right'])
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    ImageComponent Neg_Aut_Set
      image [set every repeat] = $Face_Set
      saveStartStop = False
      size = (1.5, 0.8)
      startEstim = 13
      startVal [condition] = $Neg_Aut_Distractor.status==FINISHED
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    KeyboardComponent Neg_Aut_Set_Resp
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 13
      startVal [condition] = $Neg_Aut_Distractor.status==FINISHED
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  Routine Pos_Prime_MDMQ
    TextComponent Pos_Priming_Task
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
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      text:
        Positive Priming Task:

        This task will last 45 seconds.

        During this time, please recall and experience
        as strongly as you can, a vivid positive memory.

        Any positive instance is valid, there is no restriction.
    FormComponent MDMQ_Scale_Pos
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = MDMQ.xlsx
      Randomize = True
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1.2, 0.9)
      startVal [time (s)] = 45
      stopVal [duration (s)] = 60
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    KeyboardComponent Pos_MDMQ_proceed
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 45
      stopVal [duration (s)] = 60
      store = all keys
      syncScreenRefresh = False
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  Routine Neg_Prime_MDMQ
    TextComponent Neg_Priming_Task
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
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      text:
        Negative Priming Task:

        This task will last 45 seconds.

        During this time, please recall and experience
        as strongly as you can, a vivid negative memory.

        Any negative instance is valid, there is no restriction.
    FormComponent MDMQ_Scale_Neg
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = MDMQ.xlsx
      Randomize = True
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1.2, 0.9)
      startVal [time (s)] = 45
      stopVal [duration (s)] = 60
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    KeyboardComponent Neg_MDMQ_proceed
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 45
      stopVal [duration (s)] = 60
      store = all keys
      syncScreenRefresh = False
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  Routine WelcomeScreen
    TextComponent WelcomeText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the emotional memory task!

        In this experiment, you will have multiple tasks. The specific instructions for each individual task will be provided before you begin.

        Press the space bar when you are ready to continue.
    KeyboardComponent key_resp_WelcomeText
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Neut_Int
    TextComponent text_Instructions_Neut_Int
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following task, you will be shown a face, then shown dots. Count the number of dots and indicate on your keyboard whether it is an odd number (press ‘left’ key) or even number (press ‘right’ key).

        Afterwards, you will be shown a scale. Please indicate, on a scale of 1 to 7, the emotional level of the face you had previously been shown, using the number keys on your keyboard (1 being the most negative, 4 being neutral, and 7 being the most positive).

        Remember to ONLY use the same hand when pressing arrows or numbers.

        Press the ‘space’ bar to continue.
    KeyboardComponent key_resp_Instructions_Neut_Int
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Neut_Aut
    TextComponent text_Instructions_Neut_Aut
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following task, you will be shown a face, then shown dots once again. Count the number of dots and indicate on your keyboard whether it is an odd number (press ‘left’ key) or even number (press ‘right’ key).

        Afterwards, you will be shown a scale, with faces on it this time. Please indicate, based on the faces presented ranging from 1 to 7,the face you had previously been shown. This can be done using the number keys on your keyboard.

        Press the ‘space’ bar to continue.
    KeyboardComponent key_resp_Instructions_Neut_Aut
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Pos_Prime
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following task, you will be emotionally primed. There will be a short 16-question scale subsequently provided, inquiring about your current emotional state.

        Once you have completed the scale, press the ‘space’ bar to continue. Press the ‘space’ bar to advance from this page as well.
    KeyboardComponent key_resp_Instructions_Pos_Prime
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Pos_Int
    TextComponent text_Instructions_Neut_Int_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following task, you will be shown a face, then shown dots. Count the number of dots and indicate on your keyboard whether it is an odd number (press ‘left’ key) or even number (press ‘right’ key).

        Afterwards, you will be shown a scale. Please indicate, on a scale of 1 to 7, the emotional level of the face you had previously been shown, using the number keys on your keyboard (1 being the most negative, 4 being neutral, and 7 being the most positive).

        Press the ‘space’ bar to continue.
    KeyboardComponent key_resp_Instructions_Neut_Int_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Pos_Aut
    TextComponent text_Instructions_Neut_Aut_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following task, you will be shown a face, then shown dots once again. Count the number of dots and indicate on your keyboard whether it is an odd number (press ‘left’ key) or even number (press ‘right’ key).

        Afterwards, you will be shown a scale, with faces on it this time. Please indicate, based on the faces presented ranging from 1 to 7,the face you had previously been shown. This can be done using the number keys on your keyboard.

        Press the ‘space’ bar to continue.
    KeyboardComponent key_resp_Instructions_Neut_Aut_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Neg_Prime
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following task, you will be emotionally primed. There will be a short 16-question scale subsequently provided, inquiring about your current emotional state.

        Once you have completed the scale, press the ‘space’ bar to continue. Press the ‘space’ bar to advance from this page as well.
    KeyboardComponent key_resp_Instructions_Pos_Prime_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Neg_Int
    TextComponent text_Instructions_Neut_Int_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following task, you will be shown a face, then shown dots. Count the number of dots and indicate on your keyboard whether it is an odd number (press ‘left’ key) or even number (press ‘right’ key).

        Afterwards, you will be shown a scale. Please indicate, on a scale of 1 to 7, the emotional level of the face you had previously been shown, using the number keys on your keyboard (1 being the most negative, 4 being neutral, and 7 being the most positive).

        Press the ‘space’ bar to continue.
    KeyboardComponent key_resp_Instructions_Neut_Int_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_Neg_Aut
    TextComponent text_Instructions_Neut_Aut_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
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    KeyboardComponent key_resp_Instructions_Neut_Aut_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine Instructions_Neut_Int
  LoopInitiator Neut_Int loopType="TrialHandler"
    Selected rows = 0:15
    conditionsFile = Intentional_Tasks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stimulus': './F1_lvl1.png', 'Corr_Ans': 1, 'Dots': './dots1.png'},
      {'Stimulus': './F2_lvl2.png', 'Corr_Ans': 2, 'Dots': './dots2.png'},
      {'Stimulus': './F3_lvl3.png', 'Corr_Ans': 3, 'Dots': './dots3.png'},
      {'Stimulus': './F4_lvl4.png', 'Corr_Ans': 4, 'Dots': './dots4.png'},
      {'Stimulus': './F5_lvl5.png', 'Corr_Ans': 5, 'Dots': './dots5.png'},
      {'Stimulus': './F6_lvl6.png', 'Corr_Ans': 6, 'Dots': './dots6.png'},
      {'Stimulus': './F7_lvl7.png', 'Corr_Ans': 7, 'Dots': './dots7.png'},
      {'Stimulus': './F9_lvl4.png', 'Corr_Ans': 4, 'Dots': './dots8.png'},
      {'Stimulus': './F10_lvl4.png', 'Corr_Ans': 4, 'Dots': './dots9.png'},
      {'Stimulus': './F11_lvl4.png', 'Corr_Ans': 4, 'Dots': './dots10.png'},
      {'Stimulus': './F12_lvl2.png', 'Corr_Ans': 2, 'Dots': './dots11.png'},
      {'Stimulus': './F13_lvl3.png', 'Corr_Ans': 3, 'Dots': './dots12.png'},
      {'Stimulus': './F14_lvl7.png', 'Corr_Ans': 7, 'Dots': './dots13.png'},
      {'Stimulus': './F15_lvl4.png', 'Corr_Ans': 4, 'Dots': './dots14.png'},
      {'Stimulus': './F16_lvl6.png', 'Corr_Ans': 6, 'Dots': './dots15.png'},
      {'Stimulus': None, 'Corr_Ans': None, 'Dots': None},
      {'Stimulus': './F17_lvl4.png', 'Corr_Ans': 4, 'Dots': './dots1.png'},
      {'Stimulus': './F21_lvl1.png', 'Corr_Ans': 1, 'Dots': './dots2.png'},
      {'Stimulus': './F22_lvl2.png', 'Corr_Ans': 2, 'Dots': './dots3.png'},
      {'Stimulus': './F23_lvl3.png', 'Corr_Ans': 3, 'Dots': './dots4.png'},
      {'Stimulus': './F17_lvl4.png', 'Corr_Ans': 4, 'Dots': './dots5.png'},
      {'Stimulus': './F26_lvl5.png', 'Corr_Ans': 5, 'Dots': './dots6.png'}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
    Routine Neut_Int_Task
  LoopTerminator Neut_Int
  Routine Instructions_Neut_Aut
  LoopInitiator Neut_Aut loopType="TrialHandler"
    Selected rows = 0:15
    conditionsFile = Automatic_Tasks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Face_Stimulus': './F36_lvl4.png', 'Correct_Answer': 4, 'Face_Set': './F36_set.jpg', 'Dots_image': './dots1.png'},
      {'Face_Stimulus': './F42_lvl1.png', 'Correct_Answer': 1, 'Face_Set': './F42_set.jpg', 'Dots_image': './dots2.png'},
      {'Face_Stimulus': './F42_lvl2.png', 'Correct_Answer': 2, 'Face_Set': './F42_set.jpg', 'Dots_image': './dots3.png'},
      {'Face_Stimulus': './F37_lvl4.png', 'Correct_Answer': 4, 'Face_Set': './F37_set.jpg', 'Dots_image': './dots4.png'},
      {'Face_Stimulus': './F1_lvl5.png', 'Correct_Answer': 5, 'Face_Set': './F1_set.png', 'Dots_image': './dots5.png'},
      {'Face_Stimulus': './F2_lvl6.png', 'Correct_Answer': 6, 'Face_Set': './F2_set.png', 'Dots_image': './dots6.png'},
      {'Face_Stimulus': './F44_lvl3.png', 'Correct_Answer': 3, 'Face_Set': './F44_set.jpg', 'Dots_image': './dots7.png'},
      {'Face_Stimulus': './F38_lvl4.png', 'Correct_Answer': 4, 'Face_Set': './F38_set.jpg', 'Dots_image': './dots8.png'},
      {'Face_Stimulus': './F45_lvl3.png', 'Correct_Answer': 3, 'Face_Set': './F45_set.jpg', 'Dots_image': './dots9.png'},
      {'Face_Stimulus': './F3_lvl6.png', 'Correct_Answer': 6, 'Face_Set': './F3_set.png', 'Dots_image': './dots10.png'},
      {'Face_Stimulus': './F4_lvl7.png', 'Correct_Answer': 7, 'Face_Set': './F4_set.png', 'Dots_image': './dots11.png'},
      {'Face_Stimulus': './F39_lvl4.png', 'Correct_Answer': 4, 'Face_Set': './F39_set.jpg', 'Dots_image': './dots12.png'},
      {'Face_Stimulus': './F5_lvl7.png', 'Correct_Answer': 7, 'Face_Set': './F5_set.png', 'Dots_image': './dots13.png'}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
    Routine Neut_Aut_Task
  LoopTerminator Neut_Aut
  Routine Instructions_Pos_Prime
  Routine Pos_Prime_MDMQ
  Routine Instructions_Pos_Int
  LoopInitiator Pos_Int loopType="TrialHandler"
    Selected rows = 16:31
    conditionsFile = Intentional_Tasks.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Pos_Int_Task
  LoopTerminator Pos_Int
  Routine Instructions_Pos_Aut
  LoopInitiator Pos_Aut loopType="TrialHandler"
    Selected rows = 16:31
    conditionsFile = Automatic_Tasks.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Pos_Aut_Task
  LoopTerminator Pos_Aut
  Routine Instructions_Neg_Prime
  Routine Neg_Prime_MDMQ
  Routine Instructions_Neg_Int
  LoopInitiator Neg_Int loopType="TrialHandler"
    Selected rows = 32:47
    conditionsFile = Intentional_Tasks.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Neg_Int_Task
  LoopTerminator Neg_Int
  Routine Instructions_Neg_Aut
  LoopInitiator Neg_Aut loopType="TrialHandler"
    Selected rows = 32:47
    conditionsFile = Automatic_Tasks.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Neg_Aut_Task
  LoopTerminator Neg_Aut
